CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DAPI
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:InverseDAPI
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum of all images
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    Intensity range for the output image:1.0,0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:InverseDAPI
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):25,170
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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